PsychoPy2experiment version="2022.1.1"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['sbj'], expName, expInfo['date'])
  Experiment info = {'sbj': '', 'hndns': '', 'eye': '', 'age': '', 'edu': '', 'sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[0,0,0]
  colorSpace = hsv
  expName = HW1_Rostami_810100355
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent Hello
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        سلام
        آزمون شناختی شما به زودی آغاز می شود
  Routine guideR
    ImageComponent key_r
      image = KbRight.jpg
      ori = 90
      pos = (-0.45, 0)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent key_gr
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0.43, 0)
      startVal [time (s)] = 0.0
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      text:
        پس از دیدن تصویر چهره جنسیت را حدس
         بزنید و کلید مربوطه را فشار دهید
        مرد -> p key
        زن -> o key

        برای شروع تست کلید space را فشار دهید
    KeyboardComponent key_esc_r
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixR
    PolygonComponent fix_right
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.008, 0.008)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine testR
    ImageComponent face_r
      image [set every repeat] = $stm
      pos [set every repeat] = pos
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_sel_r
      allowedKeys = 'o','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine guideL
    ImageComponent key_l
      image = KbLeft.jpg
      ori = 90
      pos = (-0.45, 0)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent key_gl
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0.43, 0)
      startVal [time (s)] = 0.0
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      text:
        پس از دیدن تصویر چهره جنسیت را حدس
         بزنید و کلید مربوطه را فشار دهید
        مرد -> w key
        زن -> q key

        برای شروع تست کلید space را فشار دهید
    KeyboardComponent key_esc_l
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixL
    PolygonComponent fix_left
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.008, 0.008)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine testL
    ImageComponent face_l
      image [set every repeat] = $stm
      pos [set every repeat] = pos
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_sel_l
      allowedKeys = 'w','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Bye
    TextComponent bye
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        ممنون از شرکت در این  آزمایش

        طراح: سارا رستمی
        810100355
Flow
  Routine trial
  LoopInitiator loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine guideR
    LoopInitiator loopR loopType="TrialHandler"
      conditionsFile = input.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [{'stm': '0.bmp', 'pos': (0, 0), 'size': (4.36, 4.36)},
        {'stm': '0.bmp', 'pos': (3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (-1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (-3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (-1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (0, 6.11), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (-5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (-5.25, -3.05), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (0, -6.11), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (5.25, -3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (0, 0), 'size': (4.36, 4.36)},
        {'stm': '10.bmp', 'pos': (3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (-1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (-3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (-1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (0, 6.11), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (-5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (-5.25, -3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (0, -6.11), 'size': (10.5, 10.5)}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
      Routine fixR
      Routine testR
    LoopTerminator loopR
    Routine guideL
    LoopInitiator loopL loopType="TrialHandler"
      conditionsFile = input.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [{'stm': '0.bmp', 'pos': (0, 0), 'size': (4.36, 4.36)},
        {'stm': '0.bmp', 'pos': (3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (-1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (-3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (-1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '0.bmp', 'pos': (5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (0, 6.11), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (-5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (-5.25, -3.05), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (0, -6.11), 'size': (10.5, 10.5)},
        {'stm': '0.bmp', 'pos': (5.25, -3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (0, 0), 'size': (4.36, 4.36)},
        {'stm': '10.bmp', 'pos': (3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (-1.74, 3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (-3.49, 0), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (-1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (1.74, -3), 'size': (6.98, 6.98)},
        {'stm': '10.bmp', 'pos': (5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (0, 6.11), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (-5.25, 3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (-5.25, -3.05), 'size': (10.5, 10.5)},
        {'stm': '10.bmp', 'pos': (0, -6.11), 'size': (10.5, 10.5)}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
      Routine fixL
      Routine testL
    LoopTerminator loopL
  LoopTerminator loop
  Routine Bye
